PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay discounting exp
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(reward_future) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','f'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Hirva Agarwal/Desktop/Lab in Psych/Delay discounting/discounting conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'reward_future': 30, 'delay': 7},
      {'reward_today': 15, 'reward_future': 35, 'delay': 13},
      {'reward_today': 27, 'reward_future': 50, 'delay': 21},
      {'reward_today': 40, 'reward_future': 55, 'delay': 62},
      {'reward_today': 49, 'reward_future': 60, 'delay': 89},
      {'reward_today': 67, 'reward_future': 75, 'delay': 119},
      {'reward_today': 78, 'reward_future': 82, 'delay': 162}]
    Routine trial
  LoopTerminator trials
